CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the "Images" module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders. For this example drop the nuclei image to be analyzed with its ground truth in the "Drop files and folders here" box.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The "Metadata" module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file. In this example "Metadata" will not be used.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The "NamesAndTypes" module allows to assign a meaningful name to each image by which other modules will refer to it. 3D images will be processed so "Yes" is chosen to the right of "Process as 3D?". The relative pixel spacing is found by opening the image in ImageJ Fiji, opening the "Image" tab followed by "Show Info..." . The voxel size can be seen in the image info description. In this example the image containing "C2" is named "Nucleus" and image containing the word "truth" is named "Ground_truth". Differentiating these two sets of 3D images could also be done by using other criteria. ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.101
    Relative pixel spacing in Y:0.101
    Relative pixel spacing in Z:0.5
    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "truth")
    Name to assign these images:Ground_truth
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The "Groups" module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc. This option is not needed in this example so "No" is chosen.']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['It is sometimes helpful to rescale images when processing them in CellProfiler. If the objects in question are relatively homogeneous within experiments but are very different experiment-to-experiment this standardizes the input in a way that makes processing images more reproducible and suppresses experimental variation and batch effects; however if your objects are relatively heterogeneous within a single experiment or you have areas with bright debris this is not recommended. A "RescaleIntensity" module is only needed for raw images in this example. This module will rescale intensity of the nuclei image.']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
    Select the input image:Nucleus
    Name the output image:RescaleIntensityNucleus
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:6|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notes:['Processing 3D images requires much more computation time than 2D images. Often, downsampling an image can yield large performance gains and at the same time smooth an image to remove noise. If the objects of interest are relatively large compared to the pixel size, then downsampling will only minimally affect the final segmentation.  This module will resize the nuclei image.']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
    Select the input image:RescaleIntensityNucleus
    Name the output image:ResizeNucleus
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Select the image with the desired dimensions:RescaleIntensity
    Additional image count:0

GaussianFilter:[module_num:7|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notes:['A Gaussian filter will reduce noise by blurring the image and is useful when the foreground signal is noisy. Ideal tuning at this step helps prevent oversegmentation but will not cause undersegmentation of the nuclei.  A filter window size of 2 is chosen.']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
    Select the input image:ResizeNucleus
    Name the output image:GaussianFilterNucleus
    Sigma:3

Threshold:[module_num:8|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notes:['This step will separate the foreground (nuclei) from the background. We have chosen the RobustBackground method of segmentation using 3.5 standard deviations to obtain a relatively strict threshold. ']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
    Select the input image:GaussianFilterNucleus
    Name the output image:ApplyThresholdNucleus
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:3.5
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
RemoveHoles:[module_num:9|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notes:['This module implements an algorithm that will remove small holes within the nucleus. Otherwise holes will contribute to oversegmentation of the nuclei. Size 80 is chosen to avoid this.']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
    Select the input image:ApplyThresholdNucleus
    Name the output image:RemoveHolesNucleus
    Size:80

Watershed:[module_num:10|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notes:['This module implements the watershed algorithm which will segment the nuclei. Essentially this involves finding the center of the spheres we thresholded in the last step, looking for the pixels with the furthest distance from the edge, calling them "centers", then expanding out from the centers until all thresholded pixels have been added to one object or another.  See http://scikit-image.org/docs/dev/auto_examples/segmentation/plot_watershed.html for more information.']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
    Select the input image:RemoveHolesNucleus
    Name the output object:WatershedNucleus
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:8
    Downsample:1

ConvertObjectsToImage:[module_num:11|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notes:['Before measuring segmented and ground truth image overlap the segmented objects need to be converted to image format. ']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
    Select the input objects:WatershedNucleus
    Name the output image:WatershedUint16
    Select the color format:uint16
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
Resize:[module_num:12|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notes:['To decrease image processing time the original nuclei image was resized in the beginning of the pipeline. To account for this size adjustment the segmented nuclei image will be resized back to the same size as the original image for image overlap measurements.']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
    Select the input image:WatershedUint16
    Name the output image:ResizeWatershedUint16
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

ResizeObjects:[module_num:13|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notes:['To decrease image processing time the original nuclei image was resized in the beginning of the pipeline. To account for this size adjustment the segmented nuclei image will be resized back to the same size as the original image.']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
    Select the input object:WatershedNucleus
    Name the output object:ResizeNucleusObjects
    Method:Factor
    Factor:4
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
Threshold:[module_num:14|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notes:['In order to measure image overlap by the "MeasureImageOverlap" module the images should be in binary format. Since we want to capture everything in the segmented image, an arbitrarily low manual threshold has been chosen.']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
    Select the input image:ResizeWatershedUint16
    Name the output image:ApplyThresholdResizedWatershed
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.0000000005
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
Threshold:[module_num:15|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notes:['In order to measure image overlap by the "MeasureImageOverlap" module the images should be in binary format. Since we want to capture everything in the ground truth image, an arbitrarily low manual threshold has been chosen.']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
    Select the input image:Ground_truth
    Name the output image:ApplyThresholdGroundTruth
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.0000000005
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
MeasureImageOverlap:[module_num:16|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notes:['This module evaluates how well the binary image produced after processing the raw image agrees with ground truth by calculating how much overlap there is between them.']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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:ApplyThresholdGroundTruth
    Select the image to be used to test for overlap:ApplyThresholdResizedWatershed
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

OverlayObjects:[module_num:17|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notes:['This module allows to visualize how well the nuclei image was segmented.']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
    Input:Nucleus
    Name the output image:NucleiOverlay
    Objects:ResizeNucleusObjects
    Opacity:0.2

SaveImages:[module_num:18|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notes:['The SaveImages module lets us save our overlay images to peruse later- this module saves the image of the overlaid nuclei.']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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SegmentedNuclei
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:19|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notes:['The module allows us to measure intensity of the nuclei in the original image. ']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
    Hidden:1
    Select an image to measure:Nucleus
    Select objects to measure:ResizeNucleusObjects

MeasureObjectSizeShape:[module_num:20|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notes:['The module allows us to measure the size and shape of the nuclei in the segmented image.  ']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
    Select objects to measure:ResizeNucleusObjects
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:21|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notes:['All data obtained for segmented nuclei can be extracted by using this module.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\\\\\\\Paper corrections\\\\\\\\Figure 3 and pipe corrections
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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