CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.1238060
    Relative pixel spacing in Y:0.1238060
    Relative pixel spacing in Z:0.1238060
    Select the rule criteria:and (file does contain "fiji")
    Name to assign these images:fiji
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ground")
    Name to assign these images:ground_truth
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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notes:['Since the “MeasureImageOverlap” module requires the images to be binary both the image and ground truth need to be converted to this format. Since we want to capture everything in the ground truth image, an arbitrarily low manual threshold has been chosen.']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
    Select the input image:ground_truth
    Name the output image:Threshold_truth
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.0000000005
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
Threshold:[module_num:6|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notes:['Since the “MeasureImageOverlap” module requires the images to be binary both the image and ground truth need to be converted to this format. Since we want to capture everything in the nuclei image processed in Fiji, an arbitrarily low manual threshold has been chosen.']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
    Select the input image:fiji
    Name the output image:Threshold_fiji
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.0000000005
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
MeasureImageOverlap:[module_num:7|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notes:['This module is used to measure the overlap of two images. By comparing the binary images produced in the previous two steps, we can measure the accuracy of Fiji vs ground truth.']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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:Threshold_truth
    Select the image to be used to test for overlap:Threshold_fiji
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

ExportToSpreadsheet:[module_num:8|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notes:['All data obtained for segmented objects can be extracted by using this module.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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