CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:44
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the "Images" module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders. In this example raw nuclei and membrane images and ground truth of nuclei image are uploaded. ']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The "Metadata" module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file. In this example "Metadata" will not be used.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The "NamesAndTypes" module allows you to assign a meaningful name to each image by which other modules will refer to it. 3D images will be processed so "Yes" is chosen to the right of "Process as 3D?". The relative pixel spacing is found by opening the image in ImageJ Fiji, opening the "Image" tab followed by "Show Info...". The voxel size can be seen in the image info description. In this example the image containng "C0" is named as "Membrane","C2" as "Nucleus" and image containing the word "truth" as "Ground_truth". Differentiating these three sets of 3D images could also be done by using other criteria. ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.065
    Relative pixel spacing in Y:0.065
    Relative pixel spacing in Z:0.29
    Select the rule criteria:and (file does contain "C=2")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C=0")
    Name to assign these images:Membrane
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "truth")
    Name to assign these images:Ground_truth
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The "Groups" module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc. In this case grouping images is not needed. ']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['It is sometimes helpful to rescale images when processing them in CellProfiler. If the objects in question are relatively homogeneous within experiments but are very different experiment-to-experiment this standardizes the input in a way that makes processing images more reproducible and suppresses experimental variation and batch effects; however if your objects are relatively heterogeneous within a single experiment or you have areas with bright debris this is not recommended.  If rescaling in this fashion, a "RescaleIntensity" module is needed for each channel. This module is used for the nuclei image. ']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
    Select the input image:Nucleus
    Name the output image:RescaleIntensityNucleus
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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notes:['It is sometimes helpful to rescale images when processing them in CellProfiler. If the objects in question are relatively homogeneous within experiments but are very different experiment-to-experiment this standardizes the input in a way that makes processing images more reproducible and suppresses experimental variation and batch effects; however if your objects are relatively heterogeneous within a single experiment or you have areas with bright debris this is not recommended.  If rescaling in this fashion, a "RescaleIntensity" module is needed for each channel.  This module is used for the membrane image. ']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
    Select the input image:Membrane
    Name the output image:RescaleIntensityMembrane
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:7|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notes:['Processing 3D images requires much more computation time than 2D images. Often, downsampling an image can yield large performance gains and at the same time smooth an image to remove noise. If the objects of interest are relatively large compared to the pixel size, then downsampling will only minimally affect the final segmentation. A value of 0.25 is chosen. This module will resize the nuclei image.']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
    Select the input image:RescaleIntensityNucleus
    Name the output image:ResizeNucleus
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Select the image with the desired dimensions:RescaleIntensity
    Additional image count:0

Resize:[module_num:8|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notes:['Processing 3D images requires much more computation time than 2D images. Often, downsampling an image can yield large performance gains and at the same time smooth an image to remove noise. If the objects of interest are relatively large compared to the pixel size, then downsampling will only minimally affect the final segmentation. A value of 0.25 is chosen. This module will resize the membrane image.']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
    Select the input image:RescaleIntensityMembrane
    Name the output image:ResizeMembrane
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Select the image with the desired dimensions:RescaleIntensity
    Additional image count:0

MedianFilter:[module_num:9|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notes:["A median filter will homogenize the signal within the nucleus and reduce noise in the background. DNA is not uniformly distributed throughout the nucleus, which can lead to holes forming in the downstream object identification. Choose a filter window size of 5. This number was chosen empirically: it is smaller than the diameter of a typical nucleus and it is small enough that nuclei aren't merged together, but it is large enough to help suppress over-segmentation of the nuclei."]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
    Select the input image:ResizeNucleus
    Name the output image:MedianFilterNucleus1
    Window:5

EnhanceOrSuppressFeatures:[module_num:10|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notes:['This module helps suppress 12 pixel or smaller areas with variable intensity to produce an image with those small features largely removed. This is a continuation of the previous step to further reduce possibility of producing holes in nuclei after thresholding which will negatively impact segmentation accuracy. ']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
    Select the input image:MedianFilterNucleus1
    Name the output image:EorS_Nucleus
    Select the operation:Suppress
    Feature size:12
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
Threshold:[module_num:11|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notes:["This module will separate the foreground (nuclei) from the background. Otsu's method is chosen with Global threshold strategy. "]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
    Select the input image:EorS_Nucleus
    Name the output image:ApplyThresholdNucleus
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
RemoveHoles:[module_num:12|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notes:['This module will remove small holes within the nucleus. Any remaining holes will contribute to oversegmentation of the nuclei.']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
    Select the input image:ApplyThresholdNucleus
    Name the output image:RemoveHolesNucleus
    Size:50

MedianFilter:[module_num:13|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notes:['This module smooths the boundaries to reduce oversegmentation of the produced binary image.']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
    Select the input image:RemoveHolesNucleus
    Name the output image:MedianFilterNucleus2
    Window:9

Watershed:[module_num:14|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notes:['This module implements the watershed algorithm, which will segment the nuclei.  Essentially this involves finding the center of the spheres we thresholded in the last step, looking for the pixels with the furthest distance from the edge, calling them "centers", then expanding out from the centers until all thresholded pixels have been added to one object or another.  See http://scikit-image.org/docs/dev/auto_examples/segmentation/plot_watershed.html for more information.']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
    Select the input image:MedianFilterNucleus2
    Name the output object:WatershedNucleus
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:8
    Downsample:2

ShrinkToObjectCenters:[module_num:15|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notes:['We\\'ve successfuly segmented the nuclei!  Now we\\'ll segment the cells around each nucleus by using the nucleus as a "seed" or "marker" for the membrane around it.  This will involve 3 steps- 1) Preparing the nuclei for seeding 2) Defining the membrane boundary and 3) Removing the extra space at the edges and 4) Segmenting the cell as all pixels between the nucleus and the membrane.', '', 'Since nucleus boundary can at times be close to the membrane in the image, its segmented form can impact the accuracy of cell segmentation in the later modules. To minimize this the nuclei are shrunk to smaller sizes before being used as markers. The segmented nuclei are first shrunk to centers by using this module.']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
    Select the input object:WatershedNucleus
    Name the output object:ShrinkToNucleiToCenters

ConvertObjectsToImage:[module_num:16|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notes:['This module converts the output from the previous module that produced segmented nuclei centers to a uint16 image. This format will be needed in the "Watershed" module to segment cells by using nuclei as markers later in the pipeline.']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
    Select the input objects:ShrinkToNucleiToCenters
    Name the output image:NucleiCentersImage
    Select the color format:uint16
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
Dilation:[module_num:17|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notes:["We want the nuclei to be smaller, but not point objects when using them as markers to segment the cells, so we'll dilate them into a ball with a radius of 8. This is the end of Step 1 (Preparing the nuclei for seeding)."]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
    Select the input image:NucleiCentersImage
    Name the output image:DilatedCentersNucleiImage
    Structuring element:ball,8

MedianFilter:[module_num:18|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notes:["We'll now move onto Step 2- Defining the membrane boundary.", '', 'This module is used to remove salt-and-pepper noise from the resized membrane image.']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
    Select the input image:ResizeMembrane
    Name the output image:MedianFilterMembrane
    Window:3

EnhanceOrSuppressFeatures:[module_num:19|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notes:['This module is used to improve the upcoming membrane thresholding by enhancing the membrane intensity and make it better defined. Neurites is a good feature to choose for membrane to enhance its long, thin features. Tubeness is used as the enhancement method and the Smoothing scale set to 2. ']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
    Select the input image:MedianFilterMembrane
    Name the output image:EorS_Membrane
    Select the operation:Enhance
    Feature size:5
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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
Threshold:[module_num:20|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notes:["This module is used to threshold the rescaled enhanced membrane image. For this image the Minimum cross entropy is used with Global strategy.  If the membrane image were perfectly bright everywhere, this would complete Step 2 (defining the membrane boundary), but as it's not we'll do a few more steps to clean it up a bit."]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
    Select the input image:EorS_Membrane
    Name the output image:ThresholdMembrane
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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
ImageMath:[module_num:21|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notes:["This module is used to invert the membrane image that will be used to segment the cells by defining the volume enclosed by the membrane.  This leaves us with the cytoplasmic space as white, and the membrane space as black.  We'll clean it up in the following modules, but this image is the basis of what we'll call the cytoplasm."]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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedMembrane
    Image or measurement?:Image
    Select the first image:ThresholdMembrane
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RemoveHoles:[module_num:22|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notes:['This module is used to clean up the inverted membrane image by filling small black holes that have size less than 65. ']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
    Select the input image:InvertedMembrane
    Name the output image:RemoveHolesMembrane
    Size:65

Opening:[module_num:23|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notes:['This module is used to remove salt noise and holes from the inverted membrane image that "RemoveHoles" module was not able to remove.']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
    Select the input image:RemoveHolesMembrane
    Name the output image:OpeningMembrane
    Structuring element:cube,5

Dilation:[module_num:24|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notes:['The previous module expanded the black space of the membrane everywhere in order to fill holes; this module with the diamond size set to 1 is used to reduce it back down slightly (while still keeping the holes filled).  This completes Step 2 - defining the membrane boundary.']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
    Select the input image:OpeningMembrane
    Name the output image:DilationInvertedMembrane
    Structuring element:diamond,1

Resize:[module_num:25|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notes:["We'll now move onto Step 3- Removing the extra space at the edges.", '', "The inverted membrane image cannot be used as the cytoplasm just yet. The space above and below the monolayer was also dark in the original image and thus appears white in the binary image. The “Watershed” module cannot distinguish that this is not cytoplasm so it will have to be removed. We'll solve this issue by using the nucleus image to define the boundaries of the monolayer by masking only the area of interest, and the first step in doing that is to make the image smaller for faster processing."]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
    Select the input image:MedianFilterNucleus1
    Name the output image:AfterMathNucleus0125
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.125
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    Interpolation method:Nearest Neighbor
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    Select the image with the desired dimensions:RescaleIntensity
    Additional image count:0

Closing:[module_num:26|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notes:['We\\'ll essentially "blur out" the edges of the segmented nuclei- the result should look like a cloud of signal where the cell monolayer resides.']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
    Select the input image:AfterMathNucleus0125
    Name the output image:ClosingNucleus
    Structuring element:disk,15

Resize:[module_num:27|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notes:['We\\'ll now resize our nuclear "haze" back to the size it was a couple of steps ago.  ']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
    Select the input image:ClosingNucleus
    Name the output image:ResizeImageClosingMathNuc8
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:ResizeMembrane
    Additional image count:0

Threshold:[module_num:28|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notes:['This module is used to threshold the smoothed nuclei image, defining what is and is not part of the cell monolayer. Note that the space above and below the cell monolayer determined by the nuclei image after closing is primarily black. This image will be used as the mask for the inverted membrane image.']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
    Select the input image:ResizeImageClosingMathNuc8
    Name the output image:ThresholdMonolayerMask
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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
MaskImage:[module_num:29|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notes:['The mask of the expanded nuclei we just made will be used to restrict the boundaries of the inverted membrane image.  The output will be the "cytoplasmic area" binary image we made in step 2 in the middle Z planes, and no signal/black in the top and bottom Z planes.  This completes Step 3- removing the extra space at the edges.']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
    Select the input image:DilationInvertedMembrane
    Name the output image:MaskedMembrane
    Use objects or an image as a mask?:Image
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    Select image for mask:ThresholdMonolayerMask
    Invert the mask?:No

Watershed:[module_num:30|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notes:["Everything needed for cell segmentation is now available, so we can finally do Step 4 - segmenting the cell as all pixels between the nucleus and the membrane. The input is the median-filtered resized membrane image - the output of the first module in Step 2. The nuclear balls we made in Step 1 are the Markers. The mask prepared in Step 3 is used as the Mask and keeps the boundary of the cytoplasm restricted to only where we want it.  We've now finished our segmentations!"]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
    Select the input image:MedianFilterMembrane
    Name the output object:WatershedCells
    Generate from:Markers
    Markers:DilatedCentersNucleiImage
    Mask:MaskedMembrane
    Connectivity:8
    Downsample:1

ConvertObjectsToImage:[module_num:31|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notes:['Now we\\'ll convert the segmented nuclei to a uint16 that will be later used for "MeasureImageOverlap" module.']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
    Select the input objects:WatershedNucleus
    Name the output image:SegmentedNucleiImage
    Select the color format:uint16
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
Resize:[module_num:32|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notes:["If all we were doing is segmenting, we'd be done, but since we have ground truth in this experiment we'll do a few steps to compare the accuracy of the segmentation with the ground truth.", '', 'This module is used to resize the segmented image of the nuclei by 4 to make it the same size as the ground truth. ']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
    Select the input image:SegmentedNucleiImage
    Name the output image:ResizeSegmentedNucleiImage
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Nearest Neighbor
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    Select the image with the desired dimensions:RescaleIntensity
    Additional image count:0

ResizeObjects:[module_num:33|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notes:["To decrease image processing time the original images were resized in the beginning of the pipeline. We'll now resize our segmented objects back to the same size as the original image.  This module resizes the nuclei."]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
    Select the input object:WatershedNucleus
    Name the output object:ResizeNucleus
    Method:Factor
    Factor:4
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
ResizeObjects:[module_num:34|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notes:["To decrease image processing time the original images were resized in the beginning of the pipeline. We'll now resize our segmented objects back to the same size as the original image.  This module resizes the cells."]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
    Select the input object:WatershedCells
    Name the output object:ResizeCells
    Method:Factor
    Factor:4
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
Threshold:[module_num:35|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notes:['Since the “MeasureImageOverlap” module requires the images to be binary both the image and ground truth need to be converted to this format. Since we want to capture everything in the ground truth image, an arbitrarily low manual threshold has been chosen.']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
    Select the input image:Ground_truth
    Name the output image:ThresholdGroundTruth
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.0000000005
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
Threshold:[module_num:36|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notes:['Since the “MeasureImageOverlap” module requires the images to be binary both the image and ground truth need to be converted to this format. Since we want to capture everything in the nuclei image, an arbitrarily low manual threshold has been chosen.']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
    Select the input image:ResizeSegmentedNucleiImage
    Name the output image:ThresholdResizeNucleiImage
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.0000000005
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
MeasureImageOverlap:[module_num:37|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notes:['This module is used to measure the overlap of two images. By comparing the binary images produced in the previous two steps, we can measure the accuracy of our segmentation vs our ground truth.']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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:ThresholdGroundTruth
    Select the image to be used to test for overlap:ThresholdResizeNucleiImage
    Calculate earth mover's distance?:250
    Maximum # of points:K Means
    Point selection method:250
    Maximum distance:No
    Penalize missing pixels:K Means

OverlayObjects:[module_num:38|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notes:['This module allows us to visualize how well the nuclei image was segmented.']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
    Input:RescaleIntensityNucleus
    Name the output image:OverlayObjectsNuclei
    Objects:ResizeNucleus
    Opacity:0.3

OverlayObjects:[module_num:39|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notes:['This module allows us to visualize how well the cells were segmented inside the membrane image.']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
    Input:RescaleIntensityMembrane
    Name the output image:OverlayObjectsCells
    Objects:ResizeCells
    Opacity:0.3

MeasureObjectIntensity:[module_num:40|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notes:['The module allows us to measure the intensity of our original membrane and nuclei channels inside our segmented objects. ']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
    Hidden:2
    Select an image to measure:Membrane
    Select an image to measure:Nucleus
    Select objects to measure:ResizeCells
    Select objects to measure:ResizeNucleus

MeasureObjectSizeShape:[module_num:41|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notes:['The module allows to measure the size and shape of the segmented nuclei and cells.  ']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
    Select objects to measure:ResizeCells
    Select objects to measure:ResizeNucleus
    Calculate the Zernike features?:No

SaveImages:[module_num:42|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notes:['The SaveImages module lets us save our overlay images to peruse later- this module saves the image of the overlaid cells.']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
    Select the type of image to save:Image
    Select the image to save:OverlayObjectsCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:Membrane
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SegmentedCells
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:43|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notes:['The SaveImages module lets us save our overlay images to peruse later- this module saves the image of the overlaid nuclei.']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
    Select the type of image to save:Image
    Select the image to save:OverlayObjectsNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nucleus
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SegmentedNuclei
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:44|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notes:['All data obtained for segmented objects can be extracted by using this module. ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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